CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:44
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "C001T001")
    Name to assign these images:IF_Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C002T001")
    Name to assign these images:HIF1a
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C004T001")
    Name to assign these images:CD31
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_C003") (file does contain "MAX")
    Name to assign these images:EGFR
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_C002") (file does contain "MAX")
    Name to assign these images:PDGFRA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_C004") (file does contain "MAX")
    Name to assign these images:SF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_C005") (file does contain "MAX")
    Name to assign these images:CDK4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_C001") (file does contain "MAX")
    Name to assign these images:SF_Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C003T001")
    Name to assign these images:CD45RO
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C005T001")
    Name to assign these images:Reflectance
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Align:[module_num:5|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
    Select the alignment method:Normalized Cross Correlation
    Crop mode:Keep size
    Select the first input image:SF_Nuclei
    Name the first output image:SFNuc_Green
    Select the second input image:IF_Nuclei
    Name the second output image:Aligned_IF_Nuc

IdentifyPrimaryObjects:[module_num:6|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notes:['Identify the nuclear objects from aligned IF nuclei image']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
    Select the input image:Aligned_IF_Nuc
    Name the primary objects to be identified:Preedited_Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,55
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:10
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

EditObjectsManually:[module_num:7|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
    Select the objects to be edited:Preedited_Nuclei
    Name the edited objects:Nuclei_Clean
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:SF_Nuclei
    Allow overlapping objects?:No

ExpandOrShrinkObjects:[module_num:8|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notes:['Dilates nuclei to overlap with markers that are present on cell surface rather then within the nucleus']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
    Select the input objects:Nuclei_Clean
    Name the output objects:Dilated_Nuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
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
ExpandOrShrinkObjects:[module_num:9|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notes:['Erodes nuclei to more specifically mask intranuclear STARFISH signals']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
    Select the input objects:Nuclei_Clean
    Name the output objects:Eroded_Nuclei
    Select the operation:Shrink objects by a specified number of pixels
    Number of pixels by which to expand or shrink:1
    Fill holes in objects so that all objects shrink to a single point?:Yes
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
MaskImage:[module_num:10|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notes:['Masks the SF images through the eroded nuclear objects']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
    Select the input image:SF
    Name the output image:Masked_TERT_C228T
    Use objects or an image as a mask?:Objects
    Select object for mask:Eroded_Nuclei
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    Invert the mask?:No

MaskImage:[module_num:11|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
    Select the input image:CDK4
    Name the output image:Masked_CDK4
    Use objects or an image as a mask?:Objects
    Select object for mask:Eroded_Nuclei
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    Invert the mask?:No

MaskImage:[module_num:12|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
    Select the input image:EGFR
    Name the output image:Masked_EGFR
    Use objects or an image as a mask?:Objects
    Select object for mask:Eroded_Nuclei
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    Invert the mask?:No

MaskImage:[module_num:13|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
    Select the input image:PDGFRA
    Name the output image:Masked_PDGFRA
    Use objects or an image as a mask?:Objects
    Select object for mask:Eroded_Nuclei
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:14|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
    Select the input image:Masked_TERT_C228T
    Name the output image:Enhanced_TERT_C228T
    Select the operation:Enhance
    Feature size:18
    Feature type:Speckles
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    Speed and accuracy:Fast
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
EnhanceOrSuppressFeatures:[module_num:15|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
    Select the input image:Masked_EGFR
    Name the output image:Enhanced_EGFR
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:16|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
    Select the input image:Masked_CDK4
    Name the output image:Enhanced_CDK4
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Slow
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
EnhanceOrSuppressFeatures:[module_num:17|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
    Select the input image:Masked_PDGFRA
    Name the output image:Enhanced_PDGFRA
    Select the operation:Enhance
    Feature size:5
    Feature type:Speckles
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    Speed and accuracy:Slow
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
IdentifyPrimaryObjects:[module_num:18|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notes:['Identify CD31 as an object']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
    Select the input image:CD31
    Name the primary objects to be identified:CD31_Segment
    Typical diameter of objects, in pixel units (Min,Max):10,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:1
    Threshold correction factor:.999
    Lower and upper bounds on threshold:0.0035,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
RelateObjects:[module_num:19|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notes:['Identifies which nuclei are assoated to CD31 positivity ']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
    Parent objects:CD31_Segment
    Child objects:Nuclei_Clean
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:CD31_cells
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
IdentifyPrimaryObjects:[module_num:20|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
    Select the input image:HIF1a
    Name the primary objects to be identified:HIF1a_Segment
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:500
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.2
    Threshold correction factor:.7
    Lower and upper bounds on threshold:0.000,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

RelateObjects:[module_num:21|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notes:['Identifies which nuclei are assoated to HIF1a positivity ']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
    Parent objects:HIF1a_Segment
    Child objects:Nuclei_Clean
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:HIFa_cells
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
IdentifyPrimaryObjects:[module_num:22|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notes:['Identify CD45RO as an object. Fill the holes to help relating this marker to its nucleus ']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
    Select the input image:CD45RO
    Name the primary objects to be identified:CD45RO_Segment
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Robust Background
    Threshold smoothing scale:2
    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0.004,1.0
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    Lower outlier fraction:0.05
    Upper outlier fraction:0.05
    Averaging method:Mean
    Variance method:Standard deviation
    # of deviations:2.0
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
RelateObjects:[module_num:23|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notes:['Identifies which nuclei are CD45RO positive ']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
    Parent objects:CD45RO_Segment
    Child objects:Nuclei_Clean
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:CD45RO_cells
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
IdentifyPrimaryObjects:[module_num:24|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notes:['Takes cleaned up masked through SF signal and makes object out of it']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
    Select the input image:Enhanced_TERT_C228T
    Name the primary objects to be identified:TERT_C228T_Segment_Pre
    Typical diameter of objects, in pixel units (Min,Max):5,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1
    Threshold correction factor:.9
    Lower and upper bounds on threshold:0.2,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

EditObjectsManually:[module_num:25|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
    Select the objects to be edited:TERT_C228T_Segment_Pre
    Name the edited objects:TERT_C228T_Segment
    Numbering of the edited objects:Renumber
    Display a guiding image?:Yes
    Select the guiding image:Enhanced_TERT_C228T
    Allow overlapping objects?:No

RelateObjects:[module_num:26|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
    Parent objects:Nuclei_Clean
    Child objects:TERT_C228T_Segment
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:TERT_C228T_related
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
RelateObjects:[module_num:27|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
    Parent objects:TERT_C228T_Segment
    Child objects:Nuclei_Clean
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:TERT_C228T_cells
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
IdentifyPrimaryObjects:[module_num:28|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
    Select the input image:Masked_EGFR
    Name the primary objects to be identified:EGFR_Segment
    Typical diameter of objects, in pixel units (Min,Max):1,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:5000
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:0
    Threshold correction factor:.9999999
    Lower and upper bounds on threshold:.38,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

RelateObjects:[module_num:29|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
    Parent objects:Nuclei_Clean
    Child objects:EGFR_Segment
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:EGFR_segment_related
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
IdentifyPrimaryObjects:[module_num:30|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
    Select the input image:Masked_CDK4
    Name the primary objects to be identified:CDK4_Segment
    Typical diameter of objects, in pixel units (Min,Max):1,8
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:.05
    Threshold correction factor:.999
    Lower and upper bounds on threshold:0.38,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

RelateObjects:[module_num:31|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
    Parent objects:Nuclei_Clean
    Child objects:CDK4_Segment
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:CDK4_segment_related
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
IdentifyPrimaryObjects:[module_num:32|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
    Select the input image:Masked_PDGFRA
    Name the primary objects to be identified:PDGFRA_Segment
    Typical diameter of objects, in pixel units (Min,Max):1,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Erase
    Maximum number of objects:5000
    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:.09
    Threshold correction factor:.99
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

RelateObjects:[module_num:33|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
    Parent objects:Nuclei_Clean
    Child objects:PDGFRA_Segment
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:PDGFRA_segment_related
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
OverlayOutlines:[module_num:34|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
    Display outlines on a blank image?:Yes
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    Name the output image:Marker_Overlay
    Outline display mode:Color
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    How to outline:Thick
    Select outline color:#00FF80
    Select objects to display:CD31_Segment
    Select outline color:#CB50FA
    Select objects to display:HIF1a_Segment
    Select outline color:#0421EC
    Select objects to display:Nuclei_Clean
    Select outline color:#00DFDF
    Select objects to display:CDK4_Segment
    Select outline color:yellow
    Select objects to display:EGFR_Segment
    Select outline color:#FF0006
    Select objects to display:PDGFRA_Segment
    Select outline color:#FF8B53
    Select objects to display:CD45RO_Segment
    Select outline color:white
    Select objects to display:TERT_C228T_Segment

MeasureObjectSizeShape:[module_num:35|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
    Select object sets to measure:CDK4_Segment, CDK4_segment_related, EGFR_Segment, EGFR_segment_related, Nuclei_Clean, PDGFRA_Segment, PDGFRA_segment_related
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

CalculateMath:[module_num:36|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
    Name the output measurement:Percent_EGFR
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:EGFR_Segment
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei_Clean
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:37|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
    Name the output measurement:Percent_CDK4
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:CDK4_Segment
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei_Clean
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:38|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
    Name the output measurement:Percent_PDGFRA
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:PDGFRA_Segment
    Select the numerator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:Nuclei_Clean
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:100
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
DisplayDataOnImage:[module_num:39|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
    Display object or image measurements?:Object
    Select the input objects:Nuclei_Clean
    Measurement to display:Number_Object_Number
    Select the image on which to display the measurements:SF_Nuclei
    Text color:#DB0000
    Name the output image that has the measurements displayed:Nuclei_Counts
    Font size (points):10
    Number of decimals:0
    Image elements to save:Figure
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Agency FB
    Use scientific notation?:No
    Font weight:normal

ConvertObjectsToImage:[module_num:40|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
    Select the input objects:Nuclei_Clean
    Name the output image:Nucleus_Segment
    Select the color format:Color
    Select the colormap:Default

SaveImages:[module_num:41|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
    Select the type of image to save:Image
    Select the image to save:Nucleus_Segment
    Select method for constructing file names:From image filename
    Select image name for file prefix:IF_Nuclei
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segment
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Dropbox (Scripps Research)\\Janiszewska Lab\\Ugoma_JaniszewskaLab\\Prelim_ImageSet_Moffitt\\Broad\\CASE05_RECURRENT
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Output Folder sub-folder|Dropbox (Scripps Research)\\Janiszewska Lab\\Ugoma_JaniszewskaLab\\Prelim_ImageSet_Moffitt\\Broad\\CASE05_RECURRENT
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    Save with lossless compression?:Yes

SaveImages:[module_num:42|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
    Select the type of image to save:Image
    Select the image to save:Marker_Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:IF_Nuclei
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_overlay
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Dropbox (Scripps Research)\\Janiszewska Lab\\Ugoma_JaniszewskaLab\\Prelim_ImageSet_Moffitt\\Broad\\CASE05_RECURRENT
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Output Folder sub-folder|Dropbox (Scripps Research)\\Janiszewska Lab\\Ugoma_JaniszewskaLab\\Prelim_ImageSet_Moffitt\\Broad\\CASE05_RECURRENT
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    Save with lossless compression?:Yes

SaveImages:[module_num:43|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
    Select the type of image to save:Image
    Select the image to save:Nuclei_Counts
    Select method for constructing file names:From image filename
    Select image name for file prefix:IF_Nuclei
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_counts
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Dropbox (Scripps Research)\\Janiszewska Lab\\Ugoma_JaniszewskaLab\\Prelim_ImageSet_Moffitt\\Broad\\CASE05_RECURRENT
    Image bit depth:No conversion
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:Yes
    Base image folder:Default Input Folder sub-folder|Dropbox (Scripps Research)\\Janiszewska Lab\\Ugoma_JaniszewskaLab\\Prelim_ImageSet_Moffitt\\Broad\\CASE05_RECURRENT
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:44|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Input Folder sub-folder|Dropbox (Scripps Research)\\Janiszewska Lab\\Ugoma_JaniszewskaLab\\Projects\\ImageAnalysis_Moffitt_Complete
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei_Clean|Parent_CD31_Segment,Nuclei_Clean|Parent_HIF1a_Segment,Nuclei_Clean|Parent_CD45RO_Segment,Nuclei_Clean|Children_CDK4_Segment_Count,Nuclei_Clean|Children_TERT_C228T_Segment_Count,Nuclei_Clean|Children_EGFR_Segment_Count,Nuclei_Clean|Children_PDGFRA_Segment_Count,Nuclei_Clean|AreaShape_Area,Nuclei_Clean|Location_Center_Y,Nuclei_Clean|Location_Center_X,Nuclei_Clean|Math_Percent_PDGFRA,Nuclei_Clean|Math_Percent_EGFR,Nuclei_Clean|Math_Percent_CDK4
    Representation of Nan/Inf:Null
    Add a prefix to file names?:Yes
    Filename prefix:CM_
    Overwrite existing files without warning?:No
    Data to export:Nuclei_Clean
    Combine these object measurements with those of the previous object?:No
    File name:Case09PrimA1_Broad.csv
    Use the object name for the file name?:No
